
' Creation date: 2018-06-01
' Last update: 2025-03-28 - JAM
' program authors:  Carl Bernacchi - primary
'                   Chris Montes - modifications
'                   Jesse McGrath - EKM Omnimeter metering code
'                   Khaled Messai, Justin McGrath - Anti-windup and voltage change limiting.


'  This program will operate the T-FACE Experiment.

'  All IRRs will be read continuously and stored into separate files.

'  There are two total files - one for T-FACE and one for all raw variables.


'SDM-CV04 C1 connected to C1 on CR3000, C2 to C2, C3 to C3
' Out1 to Dimmer 1.
' If additional reps are added in future, then Out2 to Dimmer 2, Out3 to Dimmer 3.
' Out4 to Dimmer 4. Additional SDM-CV04s can also be added.

'Note: The SDM-CV04 needs to be in Voltage Mode and the default as it comes from the
'      factory is Current Mode. Jumpers need to be changed to switch to voltage mode.
'      The first SDM-CV04 needs to have factory default address 0.
'      Another jumper also needes to be changed to set the address of a second
'      SDM-CV04 to be address 1.
'

' EKM Omnimeter 1 v.3 pin 14 connected to CR1000X pin P2
' EKM Omnimeter 1 v.3 pin 15 connected to CR1000X pin ground
' The Omnimeter sends 800 pulses per KWh

' Enter constants for the TFACE IRTs provided by Apogee.

'T-FACE Reference plot SN 6174
							
Const r_mc2 = 64256.9
Const r_mc1 = 7623490
Const r_mc0 = 1399260000
Const r_bc2 = 4442.54
Const r_bc1 = 169126
Const r_bc0 = -3313600
Const r_sn  = 6174		
									
'T-FACE Heated plot SN 6204
Const h_mc2 = 62453.2
Const h_mc1 = 7317150
Const h_mc0 = 1278270000
Const h_bc2 = 5409.55
Const h_bc1 = 150597
Const h_bc0 = -5665510	
Const h_sn  = 6204
						
'Below are constants for the control of the heater outputs.
Const twopi = 6.283185
Const piov2 = 1.5708
Const SB=5.67E-8
Const MODE = -1

'Declare Public Variables
Public Kp, Ki, Kd
Public BattVolt,Pnl_Tmp
Dim Nmbr_Htrs   'Number heaters per SDM-CV04 output (1000W Mor FTE)
Public Target
Public T_Diffrns
Public IxKi_sum
Public PID_out, PID_lmt, 
Public ScldOut(4)
Dim T_correct 
Public TadjH
Public mV_tpileR
Dim TbodyRK
Public TbodyRC
Dim TtarRK
Public TtarRC
Public mV_tpileH
Dim TbodyHK
Public TbodyHC
Dim TtarHK
Public TtarHC
Public Wind
Dim cons_m, cons_b, 
Public upper_lim, lower_lim, heatmanset, rainon
Dim Eff, Maxrad
Dim oldVoltage

' Public variables for power metering using EKM Omnimeter I v.3
Public ekmMeterPulseCount
Public ekmMeterKWh

Dim delta_t		 'need to set delta_t to execution interval
Public P_error, D_dMVovdt
Dim Prev_Meas, Prev_Err
Dim Kp_x_P, Kd_x_D, Sum_KpKdKi
Dim r_m, h_m, r_b, h_b
Dim PID_CR, Radjust, Th_Adjust, Rheater, Rreflect, R_IRT

Public rateLimiterOn
Dim rateTimer
Public rawPIDOutput
Public clampLenienceInterval
'These are if the RainDetector is located in this plot
Public raindet
Public rainctrl

' Voltage Limiter Parameters
Public curvature
Public allowed_rate_at_max_voltage ' Not the actual maximum. The actual allow rate is allowed_rate_at_max_voltage + minimum_allowed_rate.
Public minimum_allowed_rate ' Not the actual minimum, but it moves the curve up and down, so it influences the minimum.

' Define Data Tables (these are the final stored programs)
'  !!!!!!Note to change the name of all the files according to plot.
' This table is for all the heater array raw variables
DataTable (raw,True,-1) ' change based on plot
  DataInterval(0,10,Min,-1)
  Average (1,TbodyRC,IEEE4,0)
  Average (1,TbodyHC,IEEE4,0)
  Average (1,mV_tpileR,IEEE4,0)
  Average (1,mV_tpileH,IEEE4,0)
  Average (1,TadjH,IEEE4,0)
  Sample  (1,Target,IEEE4)
  Average (1,PID_out,IEEE4,0)
  Average (1,PID_lmt,IEEE4,0)
  Average (1,ScldOut,IEEE4,0)
  Average (1,Pnl_Tmp,IEEE4,0)
  Sample (1,heatmanset,IEEE4)
  Average(1,rainon,FP2,0)
EndTable

'  This Table is for the T-FACE critical variables.
DataTable (Control,True,-1)				' change based on plot
  DataInterval(0,10,Min,-1)
  Average (1,TtarRC,IEEE4,0)
  Average (1,TtarHC,IEEE4,0)
  Average (1,TadjH,IEEE4,0)
  Average (1,T_Diffrns,IEEE4,0)
  Sample  (1,Target,IEEE4)
  Average (1,ScldOut,IEEE4,0)
  Average (1,rainon,IEEE4,0)
  Average (1, IxKi_sum, IEEE4, 0)
  Average (1, P_error, IEEE4, 0)
  Average (1, PID_lmt, IEEE4, 0)
  Average (1, rawPIDOutput, IEEE4, 0)
  Sample  (1, rateLimiterOn, IEEE4, 0) 
EndTable


'  Subroutine to compute PID output control signal
'  Original version written with EDLOG by Tony Wahl from Campbell Scientific
Sub PIRcontrol
  'first set
  Dim windup_upper_lim, windup_lower_lim
  
  P_error = T_Diffrns - Target		                   'PROPORTIONAL
  Kp_x_P = P_error*Kp

  D_dMVovdt = (T_Diffrns - Prev_Meas)/delta_t    'DERIVATIVE
  Kd_x_D = Kd*D_dMVovdt

  Prev_Err = (Prev_Err + P_error) / 2  ' Average error  INTEGRAL
  Prev_Err = Prev_Err*delta_t
  Prev_Err= Prev_Err*Ki            'next Ki increment
  
  ' Anti-windup - only add to the integral when PID output isn't saturated. PID_lmt is stored from the last time step.
  ' When checking saturation for windup, use a slightly permissive range. Otherwise it causes oscillations when near the extremes.
  windup_upper_lim = upper_lim + clampLenienceInterval
  windup_lower_lim = lower_lim - clampLenienceInterval
  ' Since every condition does the same thing, the following would be more sensible if the three states that were combined using OR into a single statement. 
  If rawPIDOutput < windup_upper_lim AND rawPIDOutput > windup_lower_lim Then ' If the PID output is not saturated, add to the integral sum.
    IxKi_sum = IxKi_sum + Prev_Err    
  Else If rawPIDOutput >= windup_upper_lim AND Prev_err > 0 Then ' Positive error means cooling, so if we're above the upper limit, we add only positive errors to the integral sum to cool down.
    IxKi_sum = IxKi_sum + Prev_Err    
  Else If rawPIDOutput <= windup_lower_lim AND Prev_err < 0 Then ' Negative error means heating, so if we're below the lower limit, we add only negative errors to the integral sum to heat up.
    IxKi_sum = IxKi_sum + Prev_Err    
  EndIf


  Sum_KpKdKi=Kp_x_P + Kd_x_D + IxKi_sum
  PID_out = Kp_x_P + Kd_x_D + IxKi_sum
  PID_out = PID_out * MODE        'change sign according to +/- mode
  Prev_Meas = T_Diffrns          ' shift measured to Prev_meas for next time step
  Prev_Err = T_Diffrns - Target 'Store previous error to get ready for next time step

EndSub


'  Adjust the apparent temperature in the heated plot for radiation reflected
'  from the heaters.
Sub  CorrectRef
  ' Assume: fraction of thermal energy emitted by heater in the 8 to 14 um band
  '        sensed by Apogee IRR-P is 0.14 for heater at 600 degrees C.
  '        Multiply by 0.9 for window transmittance > 0.13.

  ' Assume: fraction of thermal energy emitted by canopy in the 8 to 14 um band
  '        sensed by Apogee IRR-P5 is 0.37 as per canopy at 20 degrees C.
  '        Multipy by 0.9 for window transmittance > 0.33.

  'Assume: emissivity of plant canopy = 0.98
  Eff = 10 + 25*EXP(-0.17*Wind)  'compute efficiency of heater system (%) from wind (m/s)
  Maxrad = Nmbr_Htrs * 1000 * (Eff / 100) / 7.07 ' Compute max down rad over 7.07 m^2 plot
  Rheater = Maxrad * (PID_CR / 10)^2 ' Scale in proportion to the square of the
                                     ' last value of PID control, so that have full
                                     ' correction when heaters fully on and no correction
                                     ' when heaters off.
  Rreflect = Rheater * (1 - 0.98) * 0.13              ' Calculate radiation from heater reflected by canopy
                                                      ' in 8-14 um band.
  R_IRT = 0.33*SB*(T_correct+273.15)^4 'calculate amount of energy sensed by IRT
  Radjust  = R_IRT-Rreflect  'subtract the rediation from the heater
  Th_Adjust = ((Radjust / (SB * 0.33))^0.25) - 273.15 ' Calculate temperature from the radiation

  'Note: no adjustment for canopy emmissivity and reflected sky radiation are being
  'because it is assumed that these will be the same in the reference plot.
EndSub



Function voltageLimiter(old_voltage, new_voltage, delta_t) 
' Calulate the maximum voltage increase.
  Dim voltageLimitRate, upperVoltageLimit, lowerVoltageLimit
  Dim max_voltage
  Dim numerator 
  Dim denominator

  curvature = 1.82 
  max_voltage = 10
  allowed_rate_at_max_voltage = 0.45
  minimum_allowed_rate = 0.01

  numerator = PWR(curvature, old_voltage) 
  denominator = PWR(curvature, upper_lim) 
  denominator = denominator * allowed_rate_at_max_voltage 
  voltageLimitRate = numerator / denominator + minimum_allowed_rate
  
  upperVoltageLimit = old_voltage + voltageLimitRate
  lowerVoltageLimit = old_voltage - voltageLimitRate

  ' If the new voltage is greater than the upper limit, return the upper limit
  ' If the new voltage is less than the lower limit, return the lower limit
  ' Otherwise, return the new voltage
  If new_voltage > upperVoltageLimit Then
    rateLimiterOn += 1
    return upperVoltageLimit
  Else If new_voltage < lowerVoltageLimit Then
    rateLimiterOn += 1 
    return lowerVoltageLimit
  Else
    return new_voltage
  EndIf
EndFunction



'****************************************************************************************
'Main Program
BeginProg
  ' The following are constants for this experiment.  They represent the defaults by can be
  '  changed real-time when the program is running.  Because these are all placed before the
  '  'Scan' command (below) they are set when the program first compiles and then not again.
  '  This means you can change them from the default when the programm is running without having
  '  to recompile the program.  They can be changed via a 'connected' datalogger (from the graphs
  '  or Num Display options when connected.

  Nmbr_Htrs = 24   'Number of Mor FTE heaters (1000W)
  Target = 2.5     ' Temperature rise (degrees C) of heated plot in T-FACE above reference plot in daytime
  Kp = 50		 		 'tuning constants
  Ki = 0.5
  Kd = 5
  cons_m = 0.03
  cons_b = 2.5
  upper_lim = 10  ' This is the upper limit of the heaters.  Max is 10.
  lower_lim = 0  ' This is the lowest output value of the heaters.  Lowest is 0
  heatmanset = 0 ' This is the manual control option.  -1 means automatic control.  0-10 is
  ' the scaled output from 0 to 10.  Anything other then -1 to 10 will create
  ' a time-space anomaly which would destroy the universe.  Maybe.
  delta_t=5		 'execution interval.  This must match with the 'Scan' interval below.
  oldVoltage = lower_lim
  rateTimer = 0 
  clampLenienceInterval = 0.5
  PID_lmt = 1 ' The only reason this is here is because it is used in the CorrectRef subroutine before it is set. This will only matter before the first scan.

  ' This is if the rain detector is located in this plot.
  rainctrl = -1


  PulseCountReset  ' This resets all pulse counts.  Not sure if it's needed, but whatever.

  Scan (5,Sec,0,0)



    PanelTemp (Pnl_Tmp,_60Hz) 'This is the datalogger temperature
    Battery (BattVolt)   'This tells us the voltage of the battery powering the datalogger.
    PulseCount (Wind,1,1 ,0,1,0.09462,0.2) ' This is for an optional windspeed sensor, which
    ' can be used to determine heater efficiency.

    ' This section will collect the IRR measurements from the T-FACE IRRs (both ref and heated).

    '*******T-FACE***********
    'Measure thermopile voltages of T-FACE Reference IRTs
    VoltDiff (mV_tpileR,1,mV7_5,1,True ,0,_60Hz,1.0,0) ' Diff channel 1
    'Measure ratios Vx/Vb of body thermistors of Reference IRTs
    Therm109 (TbodyRC,1,5,Vx1,0,_60Hz,1.0,0) 'SE channel 5

    'Calculation of m (slope) and b (intercept) coefficients for target temperature calculation
    r_m = r_mC2 * TbodyRC^2 + r_mC1 * TbodyRC + r_mC0
    r_b = r_bC2 * TbodyRC^2 + r_bC1 * TbodyRC + r_bC0

    'Calculation of target temperature
    TbodyRK = TbodyRC + 273.15
    TtarRK = (TbodyRK^4 + r_m *mV_tpileR + r_b)^0.25
    TtarRC = TtarRK - 273.15

    'For Heated Plots
    'Measure thermopile voltages of T-FACE Heated IRTs
    VoltDiff (mV_tpileH,1,mV7_5C,2,True ,0,_60Hz,1.0,0)
    'Measure ratios Vx/Vb of body thermistors of Heated IRTs
    Therm109 (TbodyHC,1,6,Vx1,0,_60Hz,1.0,0)
    'Calculation of m (slope) and b (intercept) coefficients for target temperature calculation
    h_m = h_mC2 * TbodyHC^2 + h_mC1 * TbodyHC + h_mC0
    h_b = h_bC2 * TbodyHC^2 + h_bC1 * TbodyHC + h_bC0

    'Calculation of target temperature
    TbodyHK = TbodyHC + 273.15
    TtarHK = (TbodyHK^4 + h_m * mV_tpileH + h_b)^0.25
    TtarHC = TtarHK - 273.15


    '*******************************************************
    ' Do an adjustment of the temperature in the heated plot for thermal radiation
    ' from the heaters that is reflected from the crop canopy to the IRT
    T_correct = TtarHC
    PID_CR = PID_lmt
    Call CorrectRef
    TadjH = Th_Adjust

    ' compute temperature differnce between heated and control plots
    T_Diffrns = TadjH-TtarRC

    Call PIRcontrol    'Compute PID control signal

    PID_lmt=PID_out
    PID_lmt = PID_lmt*cons_m + cons_b
    rawPIDOutput = PID_lmt

    
    If PID_lmt < lower_lim Then PID_lmt = lower_lim  'set lower limit
    If PID_lmt > upper_lim Then PID_lmt = upper_lim  'set upper limit

    If heatmanset < 0 Then
      'Set maximum temperature in the heated plot - presently same threshold for both experiments

      If TtarHC > 42 OR rainon = -1 Then  ' If the control plots were between 40 and 42, then the heaters will repeatedly cycle on and off with this design.

        PID_lmt = lower_lim
      Else
        PID_lmt = PID_lmt
      EndIf
    Else
      PID_lmt = heatmanset
    EndIf

    ' Set maximum temperature difference - different for each experiment
    If T_Diffrns > Target + 2 Then IxKi_sum=0
    ' PID_lmt = voltageLimiter(oldVoltage, PID_lmt, delta_t)
    
    oldVoltage = PID_lmt
    


    ScldOut(1) = PID_lmt*1000   'Scale from volts to mV
    ScldOut(2) = PID_lmt*1000   'Scale from volts to mV
    ScldOut(3) = PID_lmt*1000   'Scale from volts to mV
    ScldOut(4) = PID_lmt*1000   'Scale from volts to mV

    '***********************************************************
    SDMCVO4 (ScldOut(),4,0,10)'Send instruction to SDM-CV04s (mV,reps,SDMaddress,volts)
    '**********************************************************

    ' This is the rain detector code.  It should be present in only one plot.
    ReadIO(raindet, 8) ' This checks is there is a 5V signal coming into C4.
    ' If there is, it is raining. Only Necessary on Plot 5.
        If raindet = 8 AND rainctrl = -1 Then
          rainon =  -1
        Else
          rainon = 0
        EndIf


    rateTimer += 5 
    If rateTimer = 900 Then
      rateLimiterOn = 0 
      rateTimer = 0
    EndIf

    ' EKM Omnimeter read pulse count and convert to KW*H
    ' I know the conversion can be done in one step with PulseCount() but want both the raw count and the conversion
    PulseCount(ekmMeterPulseCount, 1, 2, 1, 0, 1, 0)
    ekmMeterKWh = ekmMeterPulseCount / 800


    CallTable raw ' change based on plot
    CallTable control  ' change based on plot

  NextScan
EndProg
